//requirements for file organization
//main directory containing all images sorted by plate into subdirectories
//requirements for image naming
//plate1-date20190101-time000000-day

//user selection of main directory
maindir = getDirectory("Choose a Directory ");
list = getFileList(maindir);
processMain1(maindir);
processMain2(maindir);

list = getList("window.titles"); 
     for (i=0; i<list.length; i++){ 
     winame = list[i]; 
     selectWindow(winame); 
     run("Close"); 
     } 

//PART1 crop groups/genotypes per plate
function processMain1(maindir) {
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], "/") && indexOf(list[i], "cropped")<0) {
			subdir = maindir+list[i];
			sublist = getFileList(subdir);
			platename = File.getName(subdir);
			cropGroup(subdir);
		}
	}
}

//PART2 analyses seeds per genotype/group per plate
function processMain2(maindir) {
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], "/") && indexOf(list[i], "cropped")<0) {
			subdir = maindir+list[i];
			sublist = getFileList(subdir);
			print("Getting seed measurements of "+subdir);
			processSub2(subdir);
		}
	print("All folders processed.");
	}
}

function processSub2(subdir) {
	print("Processing "+ subdir+ "...");
	platename = File.getName(subdir);
	
	outcrop = subdir + "/germncropped/";
	croplist = getFileList(outcrop);
	
	seedAnalysis();
	print(i+1 +"/"+list.length + " folders processed.");
}

//PART1 crops groups/genotypes
function cropGroup(subdir) {
	setBatchMode(false);
	open(subdir+platename+"_registered.tif");
	reg = getTitle();
    waitForUser("Create substack", "Please scroll to the last slice to be included for germination analysis.");	
	run("Make Substack...");
	saveAs("Tiff", subdir+platename+"_germinationsubset.tif");
	close(reg);
	open(subdir+platename+"_germinationsubset.tif");
	print("Cropping genotypes/groups of "+subdir);
	run("ROI Manager...");
	setTool("Rectangle");
	if (i==0) {
	roiManager("reset");
	waitForUser("Select each group, and add to ROI manager. ROI names will be saved. \n Please do not use dashes in the ROI names or we will complain about it later. \n ROIs cannot share names.");
	}
	if (i>0)
	waitForUser("Modify ROI and names if needed.");
	while (roiManager("count") <= 0) {
		waitForUser("Select each group and add to ROI manager. ROI names will be saved.\n Please do not use dashes in the ROI names or we will complain about it later \n ROIs cannot share names.");
	};
	run("Select None");

	outcrop = subdir + "/seedcropped/";
	File.makeDirectory(outcrop);

	setBatchMode(true);
	
	//loop enables cropping of ROI(s) followed by saving of cropped stacks
	//roi names cannot contain dashes due to split() to extract information from file name later on
	roicount = roiManager("count");
	for (x=0; x<roicount; ++x) {
    	roiManager("Select", x);
    	roiname = Roi.getName;
    	if (indexOf(roiname, "-") > 0) {
    		waitForUser("Here we go: ROI names cannot contain dashes '-'! Please modify the name. Now!");
    		roiname = Roi.getName;
    	}
    	genodir = outcrop + "/"+roiname+"/";
    	File.makeDirectory(genodir);	
		print("Cropping group "+x+1+"/"+roicount+" "+roiname+"...");
    	run("Duplicate...", "duplicate");
    	saveAs("Tiff", genodir+roiname+".tif");
    	close();
	};
close();
print(i+1 +"/"+list.length + " folders processed.");
}

//PART2 analyses seeds per genotype/group 
function seedAnalysis() {
	
	for (y = 0; y < croplist.length; ++y) {
		print("Tracking germination of "+croplist[y]);
		setBatchMode(false);
		genodir = outcrop+"/"+croplist[y]+"/";
		genolist = getFileList(genodir);
		genoname = File.getName(genodir);
		open(genodir+genolist[0]);
		stack1 = getTitle();
		run("Duplicate...", "duplicate");
		stack2 = getTitle();

		selectWindow(stack1);
		seedMask();
		roiManager("reset");
		run("Rotate 90 Degrees Right");
		setSlice(1);
		run("Create Selection");
		run("Colors...", "foreground=black background=black selection=red");
		
		roiManager("Add");
		roiManager("select", 0);
		roiManager("split");
		roiManager("select", 0);
		roiManager("delete");

		roiarray = newArray(roiManager("count"));
		for (x = 0; x<roiManager("count"); x++) {
			roiarray[x]=x;
		}
		roiManager("select", roiarray);
		roiManager("multi-measure");
		roiManager("deselect");
		tp = "Trash positions";
		Table.create(tp);
		selectWindow("Results");
		
		for (x=0; x<nResults; x++) {
		selectWindow("Results");
		area = getResult("Area", x);
			if (area<0.0012) {
				Table.set("Trash ROI", Table.size(tp), x);
			}
		}
		
		selectWindow("Trash positions");
		if (Table.size(tp)>0) {
		trasharray = Table.getColumn("Trash ROI", tp);
		roiManager("select", trasharray);
		roiManager("delete");
		
		roiarray = newArray(roiManager("count"));
		}
		close(tp);
		
		for (x = 0; x<roiManager("count"); x++) {
			roiManager("select", x);
			run("Enlarge...", "enlarge=0.08");
			roiManager("update");
			roiManager("rename", x+1);
		}
	
		run("Set Measurements...", "area perimeter shape stack display redirect=None decimal=3");
		run("Clear Results");
		
		for (x=0; x<roiManager("count"); x++) {
		roiManager("select", x);
		run("Analyze Particles...", "size=0-Infinity show=Nothing display stack");
		}
		
		selectWindow(stack1);

		roiManager("Show All");
		roiManager("Show All with labels");
		run("Flatten", "stack");
		run("Rotate 90 Degrees Left");

		selectWindow(stack2);
		run("RGB Color");
		setBatchMode(true);
		
		xmax = getWidth;
		
		for (x = 0; x < nSlices; x++) {
			slicelabel = getMetadata("Label");
			newImage("Slice label", "8-bit", xmax, 50, 1);
			setFont("SansSerif", 20, " antialiased");
			makeText(slicelabel, 0, 0);
			setForegroundColor(0, 0, 0);
			run("Draw", "slice");
			selectWindow(stack2);
			run("Next Slice [>]");
		}
		
		run("Images to Stack");
		run("RGB Color");
		label = getTitle();
		
		run("Combine...", "stack1=["+stack2+"] stack2=["+stack1+"] combine");
		run("Combine...", "stack1=[Combined Stacks] stack2=["+label+"] combine");
		
		saveAs("Tiff", genodir+platename+"_"+genoname+"_germination.tif");
		close();
		selectWindow("Results");
		Table.deleteColumn("Circ.");
		Table.deleteColumn("Solidity");
		saveAs("Text", genodir+platename+" "+genoname+" seed measurements.txt");
		run("Close");
}
}

//creates a binary mask and reduces noise
function seedMask() {
	run("8-bit");
	run("Subtract Background...", "rolling=30 stack");
	run("Median...", "radius=1 stack");
	setAutoThreshold("MaxEntropy dark");
	run("Convert to Mask", "method=MaxEntropy background=Dark");
	run("Options...", "iterations=1 count=4 do=Dilate stack");
    run("Remove Outliers...", "radius=3 threshold=50 which=Dark stack");
    run("Remove Outliers...", "radius=5 threshold=50 which=Dark stack");
}
